---
API: 3
OpenSesame: 4.1.6
Platform: nt
---
set width 1280
set title MBRT
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 720
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 22
set font_italic False
set font_family Arial
set font_bold False
set experiment_path "C:\\Users\\c7201264\\OneDrive\\10_Paper\\105_MIA\\03_Platform\\MBRT\\OpenSesame-local"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define inline_script age
	set description "Executes Python code"
	___run__
	# Create the form
	form = Form(
	    cols=[1] * 10,
	    rows=[1] * 9,
	    margins=(40, 90, 40, 80),
	    spacing=20
	)
	
	# Title label (assumes var.age_item was set previously)
	labelTitle = Label(text="{age_item}", center = True)
	form.set_widget(labelTitle, (0,0), colspan=10)
	
	# Create age buttons from 6 to 85
	ages = list(range(6, 86))  # 6–85 inclusive
	
	start_row = 1  # row 0 is used by the title
	
	for i, age_value in enumerate(ages):
	    col = i % 10
	    row = start_row + (i // 10)
	
	    btn = Button(
	        text=str(age_value)
	    )
	
	    form.set_widget(btn, (int(col), int(row)))
	
	# Run the form and store the response
	age = form._exec()
	age = int(age)
	__end__
	set _prepare ""

define feedback block_pause1
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_pause_msg}" x=0 y=0 z_index=0

define feedback block_pause2
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_pause_msg}" x=0 y=0 z_index=0

define sequence block_pause_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_pause1 True
	run block_pause2 True
	run space True

define feedback block_welcome1
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define feedback block_welcome2
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define feedback block_welcome_no_feedback1
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{no_fb_msg}" x=0 y=150 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define feedback block_welcome_no_feedback2
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{no_fb_msg}" x=0 y=150 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define sequence block_welcome_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_block_messages2 True
	run block_welcome1 "feedback_time > 0"
	run block_welcome2 "feedback_time > 0"
	run block_welcome_no_feedback1 "feedback_time == 0"
	run block_welcome_no_feedback2 "feedback_time == 0"
	run space True

define form_multiple_choice body_views
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Front and Back
	Front
	Back
	__end__
	set margins "50;50;50;50"
	set form_var selected_body_views
	set form_title "Choose the body views presented:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define feedback bye
	set reset_variables yes
	set duration 2995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="{bye_msg}" x=0 y=0 z_index=0

define feedback countdown
	set reset_variables yes
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text="{my_countdown}" x=0 y=0 z_index=0

define loop countdown_loop1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 my_countdown 3
	setcycle 1 my_countdown 2
	setcycle 2 my_countdown 1
	run countdown_sequence

define loop countdown_loop2
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 my_countdown 3
	setcycle 1 my_countdown 2
	setcycle 2 my_countdown 1
	run countdown_sequence

define sequence countdown_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run countdown True

define sequence demographics_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run age True
	run sex True
	run handedness True
	run eval_demographics True

define feedback end_pract
	set reset_variables yes
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{end_pract_msg}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0

define sequence end_pract_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run end_pract True
	run space True

define inline_script eval_demographics
	set description "Executes Python code"
	___run__
	# translate responses back into uniform code independent of language
	
	# handedness
	if handedness == handedness_l:
	    handedness = "l"   # left
	elif handedness == handedness_r:
	    handedness = "r"   # right
	elif handedness == handedness_b:
	    handedness = "b"   # both
	
	# sex
	if sex == sex_f:
	    sex = "f"          # female
	elif sex == sex_m:
	    sex = "m"          # male
	elif sex == sex_d:
	    sex = "d"          # diverse
	
	# debug
	print('sex:', sex)
	print('age:', age)
	print('handedness:', handedness)
	__end__
	set _prepare ""

define inline_script eval_response
	set description "Executes Python code"
	___run__
	# Initialize variable
	mbrt_correct_response = None
	
	# Built-in variable 'correct' is not working correctly; rely on own evaluation
	if solution == response_trial_response:
	    mbrt_correct_response = 1
	else:
	    mbrt_correct_response = 0
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run preparations True
	run init_localiser True
	run experiment_settings True
	run init_experiment_settings True
	run init_demographics True
	run demographics_sequence True
	run instructions_sequence1 True
	run practice_sequence True
	run test_sequence True
	run bye True

define sequence experiment_settings
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run response_mode True
	run n_angles True
	run body_views True
	run limbs True
	run n_reps True
	run feedback True
	run language_localiser True

define form_multiple_choice feedback
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	0.3
	0.5
	0.8
	1
	No feedback in testblock(s)
	__end__
	set margins "50;50;50;50"
	set form_var selected_feedback
	set form_title "Choose your feedback in s:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define feedback feedback_MBRT_left_correct
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_left_correct_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_left_incorrect
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_left_incorrect_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_correct
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_correct_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_incorrect
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_incorrect_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define sketchpad fixdot
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style=default x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define sketchpad fixdot_no_feedback
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style=default x=0 y=0 z_index=0

define form_multiple_choice handedness
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{handedness_r}
	{handedness_l}
	{handedness_b}
	__end__
	set margins "50;50;50;50"
	set form_var handedness
	set form_title "{handedness_item}"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script init_block_messages1
	set description "Executes Python code"
	___run__
	# Read and parse xlsx-file and define variables
	block_msg_df = pd.read_excel(pool['Block_messages.xlsx'])
	
	block_msg_row_idx = 0
	block_msg_length = len(block_msg_df)
	
	# Debugging:
	print('block_msg_row_idx:', block_msg_row_idx)
	print('block_msg_length:', block_msg_length)
	print('block_msg_df:', block_msg_df)
	__end__
	set _prepare ""

define inline_script init_block_messages2
	set description "Executes Python code"
	___run__
	# Select correct message dependent on number of blocks
	lang_col_welc = None
	lang_col_pause = None
	cur_block_welc_msg = None
	cur_block_pause_msg = None
	
	# Get current row 
	row = block_msg_df.iloc[block_msg_row_idx]
	
	if selected_n_reps != 1:
	    lang_col_welc = "block_msg_" + selected_ISO_low
	    cur_block_welc_msg = row[lang_col_welc]
	
	    lang_col_pause = "block_pause_msg_" + selected_ISO_low
	    cur_block_pause_msg = row[lang_col_pause]
	
	    # Debug
	    print("cur_block_pause_msg:", cur_block_pause_msg)
	else:
	    lang_col_welc = "single_block_msg_" + selected_ISO_low
	    cur_block_welc_msg = row[lang_col_welc]
	    cur_block_pause_msg = None  # or set a default value if needed
	
	# Advance the row index for the next loop iteration
	block_msg_row_idx = block_msg_row_idx + 1
	
	# Debug
	print("cur_block_welc_msg:", cur_block_welc_msg)
	__end__
	set _prepare ""

define inline_script init_demographics
	set description "Executes Python code"
	___run__
	import pandas as pd
	
	# read Demographics.xlsx into a dataframe
	dmg_df = pd.read_excel(pool['Demographics.xlsx'])
	
	# Set language column (e.g., 'EN')
	lang_col = selected_ISO
	
	# For each row: create a global experimental variable with the message key
	for _, row in dmg_df.iterrows():
	    varname = row['demographics']
	    value = row[lang_col]
	    # Assign as global experimental variable
	    globals()[varname] = value
	__end__
	set _prepare ""

define inline_script init_experiment_settings
	set description "Executes Python code"
	___run__
	# ISO code
	selected_ISO = lang_df.loc[lang_df['language'] == selected_language, 'ISO_code'].values[0] 
	selected_ISO_low = selected_ISO.lower()
	
	# n repetitions
	n_reps = 1
	
	if selected_n_reps in [4, 1]:
	    n_reps = n_reps
	elif selected_n_reps == 8:
	    n_reps = n_reps * 2
	elif selected_n_reps == 12:
	    n_reps = n_reps * 3
	
	if selected_n_reps != 1:
	    total_n_testbl = 4  # run 4 blocks if more than 1 repetition is selected
	
	print('n_reps:', n_reps)
	print('selected_n_reps:', selected_n_reps)
	print('total_n_testbl:', total_n_testbl)
	
	
	# feedback
	if selected_feedback == "No feedback in testblock(s)":
	    feedback_time = 0
	else:
	    feedback_time = float(selected_feedback) * 1000  # convert to ms
	
	print('selected_feedback:', selected_feedback)
	print('feedback_time:', feedback_time)
	
	
	# n angles & body views
	if selected_n_angles == "6 (0°, 45°, 135°, 180°, 225°, 315°)":
	    conditions_file = "Stimuli_6angles_def_all.xlsx"
	elif selected_n_angles == "8 (increments of 45°)":
	    conditions_file = "Stimuli_8angles_all.xlsx"
	elif selected_n_angles == "4 (increments of 90°)":
	    conditions_file = "Stimuli_4angles_all.xlsx"
	elif selected_n_angles == "6 (increments of 60°)":
	    conditions_file = "Stimuli_6angles_all.xlsx"
	elif selected_n_angles == "12 (increments of 30°)":
	    conditions_file = "Stimuli_12angles_all.xlsx"
	
	print('selected_n_angles:', selected_n_angles)
	print('conditions_file:', conditions_file)
	
	# response_mode: keys
	if selected_response_mode == "Both hands":
	    left_key = "s-key.png"
	    right_key = "l-key.png"
	else:
	    left_key = "g-key.png"
	    right_key = "h-key.png"
	
	# check for debugging
	print("selected_language:", selected_language)
	print("lang_df:", lang_df)
	print('selected_ISO:', selected_ISO)
	print('selected_response_mode:', selected_response_mode)
	print('selected_body_views:', selected_body_views)
	__end__
	set _prepare ""

define inline_script init_feedback
	set description "Executes Python code"
	___run__
	# in s: feedback_RT = (Math.floor((response_time_trial_response) / 100) / 10)
	feedback_RT = response_time_trial_response
	
	if selected_feedback != "No feedback in testblock(s)":
	    if response_trial_response in ["s", "g"]:
	        if mbrt_correct_response == 1:
	            my_feedback = 1
	        elif mbrt_correct_response == 0:
	            my_feedback = 2
	    elif response_trial_response in ["l", "h"]:
	        if mbrt_correct_response == 1:
	            my_feedback = 3
	        elif mbrt_correct_response == 0:
	            my_feedback = 4
	__end__
	set _prepare ""

define inline_script init_feedback_pract
	set description "Executes Python code"
	___run__
	# in s: feedback_RT = (Math.floor((response_time_trial_response) / 100) / 10)
	feedback_RT = response_time_trial_response
	
	if response_trial_response in ["s", "g"]:
	    if mbrt_correct_response == 1:
	        my_feedback = 1
	    elif mbrt_correct_response == 0:
	        my_feedback = 2
	elif response_trial_response in ["l", "h"]:
	    if mbrt_correct_response == 1:
	        my_feedback = 3
	    elif mbrt_correct_response == 0:
	        my_feedback = 4
	
	pract_feedback_time = 1000
	
	if feedback_time > 0:
	    pract_feedback_time = feedback_time
	__end__
	set _prepare ""

define inline_script init_instructions
	set description "Executes Python code"
	___run__
	# read messages.xlsx into a dataframe
	instr_df = pd.read_excel(pool['Instructions.xlsx'])
	# lang_col = selected_ISO  # alreasy in init_demographics
	
	for i, row in instr_df.iterrows(): # iterates over each row (instruction) of the dataframe
	    varname = row['instr_msg'] # grabs the instr_msg key (rowname)
	    value = row[lang_col] # selects the desired column
	    globals()[varname] = value # creates a global variable with the name stored in varname and assigns it the value
	    print('varname:', varname)
	    print('value:', value)
	
	# select correct instr_msg based on response_mode
	instr_msg1b = instr_msg1b_bimanual
	instr_msg3 = instr_msg3_bimanual
	
	if selected_response_mode == "Left hand":
	    instr_msg1b = instr_msg1b_left
	    instr_msg3 = instr_msg3_unimanual
	elif selected_response_mode == "Right hand":
	    instr_msg1b = instr_msg1b_right
	    instr_msg3 = instr_msg3_unimanual
	__end__
	set _prepare ""

define inline_script init_key_error
	set description "Executes Python code"
	___run__
	# currently, if a participant uses the wrong keys, the answer will always be feedbacked as incorrect
	
	if (
	    selected_response_mode == "Both hands"
	    and response_trial_response in ["h", "g"]
	):
	    run_key_error = 1
	elif (
	    selected_response_mode != "Both hands"
	    and response_trial_response in ["s", "l"]
	):
	    run_key_error = 1
	else:
	    run_key_error = 0
	
	if selected_response_mode == "Both hands":
	    my_keys = "S & L"
	else:
	    my_keys = "G & H"
	__end__
	set _prepare ""

define inline_script init_localiser
	set description "dynamic language selection from language_localiser.xlsx"
	___run__
	import pandas as pd
	
	# read language_localiser.xlsx into a dataframe
	lang_df = pd.read_excel(pool['language_localiser.xlsx'])
	
	# extracts language column and converts it into a list (= response options in language_localiser)
	language_list = lang_df['language'].tolist() 
	__end__
	set _prepare ""

define inline_script init_messages
	set description "load messages for chosen language from messages.xlsx"
	___run__
	# read messages.xlsx into a dataframe
	msg_df = pd.read_excel(pool['Messages.xlsx'])
	# lang_col = selected_ISO  # alreasy in init_demographics
	
	for i, row in msg_df.iterrows(): # iterates over each row (message) of the dataframe
	    varname = row['message'] # grabs the message key (rowname)
	    value = row[lang_col] # select the desired column
	    globals()[varname] = value # creates a global variable with the name stored in varname and assigns it the value
	    print('varname:', varname)
	    print('value:', value)
	__end__
	set _prepare ""

define inline_script init_pract_trial
	set description "Executes Python code"
	___run__
	# Get which row to use for this trial
	row_idx = pract_full_order[pract_row_idx]
	row = pract_df.iloc[row_idx]  
	
	# Set your variables for the trial
	mbrt_images = row["mbrt_images"]
	mbrt_side = row["mbrt_side"]
	mbrt_view = row["mbrt_view"]
	mbrt_angle = row["mbrt_angle"]
	mbrt_limb = row["mbrt_limb"]
	mbrt_correct_both = row["mbrt_correct_both"]
	mbrt_correct_one = row["mbrt_correct_one"]
	my_countdown = 3
	
	# Determine solution
	if selected_response_mode == "Both hands":
	    solution = mbrt_correct_both
	else:
	    solution = mbrt_correct_one
	
	# Move to next trial
	pract_row_idx = pract_row_idx + 1
	n_trial = n_trial + 1
	
	# Debugging:
	print('row_idx:', row_idx)
	print('row:', row)
	print('mbrt_images:', mbrt_images)
	print('mbrt_side:', mbrt_side)
	print('mbrt_view:', mbrt_view)
	print('mbrt_angle:', mbrt_angle)
	print('mbrt_limb:', mbrt_limb)
	print('mbrt_correct_both:', mbrt_correct_both)
	print('mbrt_correct_one:', mbrt_correct_one)
	__end__
	set _prepare ""

define inline_script init_practice
	set description "Executes Python code"
	___run__
	# Initialize variables
	phase = "MBRT_practice"
	n_trial = 0
	row = 0
	row_idx = 999
	pract_row_idx = 0
	
	mbrt_images = None
	mbrt_side = None
	mbrt_view = None
	mbrt_angle = 999
	mbrt_limb = None
	mbrt_correct_both = None
	mbrt_correct_one = None
	
	# Read and parse xlsx-file and define variables
	pract_xlsx_data = pd.read_excel(pool['Stimuli_4angles_all.xlsx'])
	
	# Filter rows where mbrt_angle == "0"
	pract_df_raw = pract_xlsx_data[pract_xlsx_data["mbrt_angle"].astype(str) == "0"].reset_index(drop=True)
	
	pract_df = None
	
	if selected_body_views == "Front and Back":
	    if selected_limbs == "Arms and Legs":
	        pract_df = pract_df_raw
	    elif selected_limbs == "Arms":
	        pract_df = pract_df_raw[pract_df_raw["mbrt_limb"] == "arm"]
	    elif selected_limbs == "Legs":
	        pract_df = pract_df_raw[pract_df_raw["mbrt_limb"] == "leg"]
	
	elif selected_body_views == "Front":
	    if selected_limbs == "Arms and Legs":
	        pract_df = pract_df_raw[pract_df_raw["mbrt_view"] == "front"]
	    elif selected_limbs == "Arms":
	        pract_df = pract_df_raw[
	            (pract_df_raw["mbrt_view"] == "front") & (pract_df_raw["mbrt_limb"] == "arm")
	        ]
	    elif selected_limbs == "Legs":
	        pract_df = pract_df_raw[
	            (pract_df_raw["mbrt_view"] == "front") & (pract_df_raw["mbrt_limb"] == "leg")
	        ]
	
	elif selected_body_views == "Back":
	    if selected_limbs == "Arms and Legs":
	        pract_df = pract_df_raw[pract_df_raw["mbrt_view"] == "back"]
	    elif selected_limbs == "Arms":
	        pract_df = pract_df_raw[
	            (pract_df_raw["mbrt_view"] == "back") & (pract_df_raw["mbrt_limb"] == "arm")
	        ]
	    elif selected_limbs == "Legs":
	        pract_df = pract_df_raw[
	            (pract_df_raw["mbrt_view"] == "back") & (pract_df_raw["mbrt_limb"] == "leg")
	        ]
	
	pract_row_idx = 0
	pract_df = pract_df.reset_index(drop=True)
	pract_length = len(pract_df)
	pract_full_order_length = pract_length
	
	# Ensure random order of trials:
	# Build an array with one entry per row, for n reps times
	import random
	pract_full_order = []
	
	for rep in range(1):  # CHANGE HERE if there should be more practice trials (use n_reps or desired number)
	    trial_indices = list(range(pract_length))
	    random.shuffle(trial_indices)  # Fisher-Yates equivalent in Python
	    pract_full_order.extend(trial_indices)
	
	# Debugging:
	print('pract_row_idx:', pract_row_idx)
	print('pract_length:', pract_length)
	print('pract_df:', pract_df)
	print('pract_full_order:', pract_full_order)
	print('pract_full_order_length:', pract_full_order_length)
	__end__
	set _prepare ""

define inline_script init_testblock_loop1
	set description "Executes Python code"
	___run__
	# Initialize variables
	phase = "MBRT_testblock"
	n_trial = 0
	row = 0
	row_idx = 999
	my_feedback = 0
	
	testbl_row_idx = 0
	n_testbl = 0  # testblock counter
	
	mbrt_images = "undefined"
	mbrt_side = "undefined"
	mbrt_view = "undefined"
	mbrt_angle = 999
	mbrt_limb = "undefined"
	mbrt_correct_both = "undefined"
	mbrt_correct_one = "undefined"
	
	# ---- testbl_total_n_trials & testbl_full_order_length (= trials per block) ----
	# conditions_file is assumed to be something like "Stimuli_6angles_def_all.xlsx"
	testbl_df_raw = pd.read_excel(pool[conditions_file])
	
	testbl_df = None
	
	if selected_body_views == "Front and Back":
	    if selected_limbs == "Arms and Legs":
	        testbl_df = testbl_df_raw
	    elif selected_limbs == "Arms":
	        testbl_df = testbl_df_raw[testbl_df_raw["mbrt_limb"] == "arm"]
	    elif selected_limbs == "Legs":
	        testbl_df = testbl_df_raw[testbl_df_raw["mbrt_limb"] == "leg"]
	
	elif selected_body_views == "Front":
	    if selected_limbs == "Arms and Legs":
	        testbl_df = testbl_df_raw[testbl_df_raw["mbrt_view"] == "front"]
	    elif selected_limbs == "Arms":
	        testbl_df = testbl_df_raw[
	            (testbl_df_raw["mbrt_view"] == "front") & (testbl_df_raw["mbrt_limb"] == "arm")
	        ]
	    elif selected_limbs == "Legs":
	        testbl_df = testbl_df_raw[
	            (testbl_df_raw["mbrt_view"] == "front") & (testbl_df_raw["mbrt_limb"] == "leg")
	        ]
	
	elif selected_body_views == "Back":
	    if selected_limbs == "Arms and Legs":
	        testbl_df = testbl_df_raw[testbl_df_raw["mbrt_view"] == "back"]
	    elif selected_limbs == "Arms":
	        testbl_df = testbl_df_raw[
	            (testbl_df_raw["mbrt_view"] == "back") & (testbl_df_raw["mbrt_limb"] == "arm")
	        ]
	    elif selected_limbs == "Legs":
	        testbl_df = testbl_df_raw[
	            (testbl_df_raw["mbrt_view"] == "back") & (testbl_df_raw["mbrt_limb"] == "leg")
	        ]
	
	# Indexing
	testbl_df = testbl_df.reset_index(drop=True)
	
	# count n_rows in conditions_file and multiply with n_reps
	testbl_length = len(testbl_df)
	testbl_full_order_length = testbl_length * n_reps
	
	testbl_total_n_trials = testbl_length * int(selected_n_reps)
	
	# Debug
	print('testbl_df_raw:', testbl_df_raw)
	print('testbl_df:', testbl_df)
	__end__
	set _prepare ""

define inline_script init_testblock_loop2
	set description "Executes Python code"
	___run__
	# Reset variable
	testbl_row_idx = 0
	
	# Ensure random order of trials: Build an array with one entry per row, for n_reps times
	#import random # use if full practice sequence is disabled 
	
	testbl_full_order = []
	
	for rep in range(n_reps):
	    # one block of all indices (in natural order)
	    trial_indices = list(range(testbl_length))
	
	    # shuffle block (Fisher-Yates equivalent)
	    random.shuffle(trial_indices)
	
	    testbl_full_order.extend(trial_indices)
	
	# testblock_counter
	n_testbl = n_testbl + 1
	
	# length testblock
	testbl_full_order_length = len(testbl_full_order)
	
	# Debugging:
	print('testbl_row_idx:', testbl_row_idx)
	print('testbl_length:', testbl_length)
	print('testbl_df:', testbl_df)
	print('testbl_full_order:', testbl_full_order)
	print('testbl_full_order_length:', testbl_full_order_length)
	__end__
	set _prepare ""

define inline_script init_trial
	set description "Executes Python code"
	___run__
	# Get which row to use for this trial
	row_idx = testbl_full_order[testbl_row_idx]
	row = testbl_df.iloc[row_idx]  # pandas Series, equivalent to JS object
	
	# Set your variables for the trial
	mbrt_images = row["mbrt_images"]
	mbrt_side = row["mbrt_side"]
	mbrt_view = row["mbrt_view"]
	mbrt_angle = row["mbrt_angle"]
	mbrt_limb = row["mbrt_limb"]
	mbrt_correct_both = row["mbrt_correct_both"]
	mbrt_correct_one = row["mbrt_correct_one"]
	
	# Determine solution
	if selected_response_mode == "Both hands":
	    solution = mbrt_correct_both
	else:
	    solution = mbrt_correct_one
	
	# Move to next trial
	testbl_row_idx = testbl_row_idx + 1
	n_trial = n_trial + 1
	
	# Debugging:
	print('row_idx:', row_idx)
	print('row:', row)
	print('mbrt_images:', mbrt_images)
	print('mbrt_side:', mbrt_side)
	print('mbrt_view:', mbrt_view)
	print('mbrt_angle:', mbrt_angle)
	print('mbrt_limb:', mbrt_limb)
	print('mbrt_correct_both:', mbrt_correct_both)
	print('mbrt_correct_one:', mbrt_correct_one)
	__end__
	set _prepare ""

define feedback instruction11
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{instr_msg1a}" x=0 y=-352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg1b}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_leg_back.png" scale=0.08 show_if=True x=224 y=-212 z_index=0

define feedback instruction12
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{instr_msg1a}" x=0 y=-352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg1b}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_leg_back.png" scale=0.08 show_if=True x=224 y=-212 z_index=0

define feedback instruction21
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg2}" x=0 y=0 z_index=0

define feedback instruction22
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg2}" x=0 y=0 z_index=0

define feedback instruction31
	set reset_variables yes
	set duration 2995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg3}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=45 scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=180 scale=0.08 show_if=True x=224 y=-212 z_index=0

define feedback instruction32
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg3}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=45 scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=180 scale=0.08 show_if=True x=224 y=-212 z_index=0

define sequence instructions_sequence1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_messages True
	run init_instructions True
	run welcome True
	run space True
	run instruction11 True
	run instruction12 True
	run space True
	run instruction21 True
	run instruction22 True
	run space True

define sequence instructions_sequence2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction31 True
	run instruction32 True
	run space True

define feedback key_error
	set reset_variables yes
	set duration 1995
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=Calibri font_italic=no font_size=32 html=yes show_if=True text="{my_keys}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=32 html=yes show_if=True text="{key_error_msg}" x=0 y=-64 z_index=0

define form_multiple_choice language_localiser
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	English
	German
	Spanish
	French
	__end__
	set margins "50;50;50;50"
	set form_var selected_language
	set form_title "Choose your language:"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice limbs
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Arms and Legs
	Arms
	Legs
	__end__
	set margins "50;50;50;50"
	set form_var selected_limbs
	set form_title "Choose the limbs to be abducted in the stimuli:"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sequence logger1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run logger True

define sequence logger2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run logger True

define form_multiple_choice n_angles
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	6 (0°, 45°, 135°, 180°, 225°, 315°)
	4 (increments of 90°)
	6 (increments of 60°)
	8 (increments of 45°)
	12 (increments of 30°)
	__end__
	set margins "50;50;50;50"
	set form_var selected_n_angles
	set form_title "Choose the number of angles presented:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice n_reps
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	1
	4
	8
	12
	__end__
	set margins "50;50;50;50"
	set form_var selected_n_reps
	set form_title "Choose the number of repetitions:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence pract_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_pract_trial True
	run fixdot True
	run trial True
	run trial_response True
	run eval_response True
	run init_key_error True
	run key_error "run_key_error == 1"
	run init_feedback_pract True
	run trial_feedback_sequence_pract "run_key_error == 0"
	run logger1 True

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_practice True
	run start_pract_sequence True
	run countdown_loop1 True
	run trial_within_practice_loop True
	run end_pract_sequence True

define inline_script preparations
	set description "Executes Python code"
	___run__
	# trial counter
	n_trial = 0
	
	# will be s & l afterwards
	solution = 0
	
	# phase item
	phase = "preparation"
	
	# random value for feedback
	my_feedback = 0
	run_key_error = 0
	
	# initialize defaults for experiment settings
	# if you want participants to choose the settings themselves, click "experiment_settings"
	# and set the respective "Run if" statement(s) to "True"
	selected_language = "English"            # Alternative options: "German", "Spanish", "French"
	ISO_code = "EN"                          # "DE", "ES", "FR"
	selected_ISO = "EN"                      # "DE", "ES", "FR"
	selected_ISO_low = "en"                  # "de", "es", "fr"
	selected_response_mode = "Both hands"    # "Left hand", "Right hand"
	selected_feedback = "No feedback in testblock(s)"          # "0.3", "0.5", "0.8", "1"
	selected_n_angles = "6 (0°, 45°, 135°, 180°, 225°, 315°)"  # "4 (increments of 90°)", "6 (increments of 60°)", "8 (increments of 45°)", "12 (increments of 30°)"
	selected_body_views = "Front and Back"   # "Front", "Back"
	selected_limbs = "Arms and Legs"         # "Arms", "Legs"
	selected_n_reps = 4                      # 1, 8, 12
	
	# other
	feedback_time = 0.3
	conditions_file = "Stimuli_6angles_def_all.xlsx"
	n_reps = 1
	age = None
	sex = None
	handedness = None
	total_n_testbl = 1
	n_testbl = 0
	total_n_trials = 999
	trials_per_block = 999
	__end__
	___prepare__
	age_item = "none"
	__end__

define form_multiple_choice response_mode
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Both hands
	Left hand
	Right hand
	__end__
	set margins "50;50;50;50"
	set form_var selected_response_mode
	set form_title "Choose your response mode:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice sex
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{sex_f}
	{sex_m}
	{sex_d}
	__end__
	set margins "50;50;50;50"
	set form_var sex
	set form_title "{sex_item}"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define keyboard_response space
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sequence start_pract_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run start_practice True
	run space True

define feedback start_practice
	set reset_variables yes
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{start_pract_msg}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_block_messages1 True
	run init_testblock_loop1 True
	run instructions_sequence2 True
	run testblock_loop True

define loop testblock_loop
	set source_file ""
	set source table
	set repeat 4
	set order random
	set description ""
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "n_testbl >= total_n_testbl"
	setcycle 0 empty_column ""
	run testblock_sequence

define sequence testblock_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_testblock_loop2 True
	run block_welcome_sequence True
	run countdown_loop2 True
	run trial_within_testblock_loop True
	run block_pause_sequence "total_n_testbl > 1"

define feedback trial
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=1 h=672 penwidth=1 show_if=True w=672 x=-336 y=-336 z_index=0
	draw circle color=white fill=1 penwidth=1 r=334 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{mbrt_images}" rotation="{mbrt_angle}" scale=0.29 show_if=True x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define sequence trial_feedback_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run feedback_MBRT_left_correct "my_feedback == 1"
	run feedback_MBRT_left_incorrect "my_feedback == 2"
	run feedback_MBRT_right_correct "my_feedback == 3"
	run feedback_MBRT_right_incorrect "my_feedback == 4"

define sequence trial_feedback_sequence_pract
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run feedback_MBRT_left_correct_pract "my_feedback == 1"
	run feedback_MBRT_left_incorrect_pract "my_feedback == 2"
	run feedback_MBRT_right_correct_pract "my_feedback == 3"
	run feedback_MBRT_right_incorrect_pract "my_feedback == 4"

define feedback trial_no_feedback
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=1 h=672 penwidth=1 show_if=True w=672 x=-336 y=-336 z_index=0
	draw circle color=white fill=1 penwidth=1 r=334 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{mbrt_images}" rotation="{mbrt_angle}" scale=0.29 show_if=True x=0 y=0 z_index=0

define keyboard_response trial_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "{solution}"
	set allowed_responses "s;l;g;h;"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_trial True
	run fixdot "feedback_time > 0"
	run fixdot_no_feedback "feedback_time == 0"
	run trial "feedback_time > 0"
	run trial_no_feedback "feedback_time == 0"
	run trial_response True
	run eval_response True
	run init_key_error True
	run key_error "run_key_error == 1"
	run init_feedback True
	run trial_feedback_sequence "run_key_error == 0 and feedback_time > 0"
	run logger2 True

define loop trial_within_practice_loop
	set source_file ""
	set source table
	set repeat 500
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "pract_row_idx >= pract_full_order_length"
	setcycle 0 empty_column ""
	run pract_trial_sequence

define loop trial_within_testblock_loop
	set source_file ""
	set source table
	set repeat 500
	set order sequential
	set description "Repeat needs to be > than the number of rows in the csv-file"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "testbl_row_idx >= testbl_full_order_length"
	setcycle 0 empty_column ""
	run trial_sequence

define feedback welcome
	set reset_variables yes
	set duration 100
	set description "Provides feedback"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=23 html=yes show_if=True text="{welcome_msg}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0

