---
API: 3
OpenSesame: 4.1.6
Platform: nt
---
set width 1366
set title MBRT_online
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "ad22e707-5ced-2fe7-c1b2-ea2839860ef3"
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 22
set font_italic False
set font_family Calibri
set font_bold False
set experiment_path "C:\\Users\\c7201264\\OneDrive\\10_Paper\\105_MIA\\03_Platform\\MBRT\\OpenSesame-online"
set disable_garbage_collection False
set description ""
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background white

define form_multiple_choice age
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	6
	7
	8
	9
	10
	11
	12
	13
	14
	15
	16
	17
	18
	19
	20
	21
	22
	23
	24
	25
	26
	27
	28
	29
	30
	31
	32
	33
	34
	35
	36
	37
	38
	39
	40
	41
	42
	43
	44
	45
	46
	47
	48
	49
	50
	51
	52
	53
	54
	55
	56
	57
	58
	59
	60
	61
	62
	63
	64
	65
	66
	67
	68
	69
	70
	71
	72
	73
	74
	75
	76
	77
	78
	79
	80
	81
	82
	83
	84
	85
	__end__
	set margins "50;50;50;50"
	set form_var age
	set form_title "{age_item}"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define feedback block_pause1
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_pause_msg}" x=0 y=0 z_index=0

define feedback block_pause2
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_pause_msg}" x=0 y=0 z_index=0

define sequence block_pause_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_pause1 True
	run block_pause2 True
	run space True

define feedback block_welcome1
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define feedback block_welcome2
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=0 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define feedback block_welcome_no_feedback1
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{no_fb_msg}" x=0 y=150 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define feedback block_welcome_no_feedback2
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{cur_block_welc_msg}" x=0 y=-50 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{no_fb_msg}" x=0 y=150 z_index=0
	draw image center=1 file="{left_key}" scale=0.3 show_if=True x=-416 y=330 z_index=0
	draw image center=1 file="{right_key}" scale=0.3 show_if=True x=416 y=330 z_index=0

define sequence block_welcome_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_block_messages2 True
	run block_welcome1 "feedback_time > 0"
	run block_welcome2 "feedback_time > 0"
	run block_welcome_no_feedback1 "feedback_time == 0"
	run block_welcome_no_feedback2 "feedback_time == 0"
	run space True

define form_multiple_choice body_views
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Front and Back
	Front
	Back
	__end__
	set margins "50;50;50;50"
	set form_var selected_body_views
	set form_title "Choose the body views presented:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define feedback bye
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{bye_msg}" x=0 y=0 z_index=0

define feedback countdown
	set reset_variables yes
	set duration 995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text="{my_countdown}" x=0 y=0 z_index=0

define loop countdown_loop1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 my_countdown 3
	setcycle 1 my_countdown 2
	setcycle 2 my_countdown 1
	run countdown_sequence

define loop countdown_loop2
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 my_countdown 3
	setcycle 1 my_countdown 2
	setcycle 2 my_countdown 1
	run countdown_sequence

define sequence countdown_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run countdown True

define sequence demographics_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run age True
	run sex True
	run handedness True
	run eval_demographics True

define feedback end_pract
	set reset_variables yes
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{end_pract_msg}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0

define sequence end_pract_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run end_pract True
	run space True

define inline_javascript eval_demographics
	set description "Executes Python code"
	___run__
	// translate responses back into uniform code independent of language
	if (handedness === handedness_l) {
	    handedness = "l" // left
	} else if (handedness === handedness_r) {
	    handedness = "r" // right
	} else if (handedness === handedness_b) {
	    handedness = "b" // both
	}
	
	if (sex === sex_f) {
	    sex = "f" // female
	} else if (sex === sex_m) {
	    sex = "m" // male
	} else if (sex === sex_d) {
	    sex = "d" // diverse
	}
	__end__
	set _prepare ""

define inline_javascript eval_response
	set description "Executes Python code"
	___run__
	// Initialize variable
	var mbrt_correct_response = undefined
	
	// Built in variable 'correct' is not working correctly; rely on own evaluation
	if (solution === response_trial_response) {
	    mbrt_correct_response = 1
	} else {
	    mbrt_correct_response = 0
	}
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Set 'Run if' to false to disable component"
	run preparations True
	run init_localiser True
	run experiment_settings True
	run init_experiment_settings True
	run init_demographics True
	run demographics_sequence True
	run instructions_sequence1 True
	run practice_sequence True
	run test_sequence True
	run bye True

define sequence experiment_settings
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run response_mode False
	run n_angles False
	run body_views False
	run limbs False
	run n_reps False
	run feedback False
	run language_localiser False

define form_multiple_choice feedback
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	0.3
	0.5
	0.8
	1
	No feedback in testblock(s)
	__end__
	set margins "50;50;50;50"
	set form_var selected_feedback
	set form_title "Choose your feedback in s:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define feedback feedback_MBRT_left_correct
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_left_correct_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_left_incorrect
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_left_incorrect_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_correct
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_correct_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=green fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_incorrect
	set reset_variables yes
	set duration "{feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define feedback feedback_MBRT_right_incorrect_pract
	set reset_variables yes
	set duration "{pract_feedback_time}"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=40 html=yes show_if=True text="{feedback_RT} ms" x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=red fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define sketchpad fixdot
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style=default x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define sketchpad fixdot_no_feedback
	set duration 995
	set description "Displays stimuli"
	draw fixdot color=black show_if=True style=default x=0 y=0 z_index=0

define form_multiple_choice handedness
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{handedness_r}
	{handedness_l}
	{handedness_b}
	__end__
	set margins "50;50;50;50"
	set form_var handedness
	set form_title "{handedness_item}"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_javascript init_block_messages1
	set description ""
	___run__
	// read and parse csv-file and define variables
	const block_msg_csv_data = pool["Block_messages.csv"].data;
	const block_msg_df = csvParse(block_msg_csv_data, { columns: true, delimiter: ';' });
	var block_msg_row_idx = 0;
	const block_msg_length = block_msg_df.length;
	
	// Debugging:
	console.log('block_msg_row_idx:',block_msg_row_idx);
	console.log('block_msg_length:',block_msg_length);
	console.log('block_msg_df:',block_msg_df)
	__end__
	set _prepare ""

define inline_javascript init_block_messages2
	set description ""
	___run__
	// Select correct msg dependent on n of blocks
	var lang_col_welc = undefined;
	var lang_col_pause = undefined;
	var cur_block_welc_msg = undefined;
	var cur_block_pause_msg = undefined;
	
	var row = block_msg_df[block_msg_row_idx];
	
	if (selected_n_reps !== "1") {
	    lang_col_welc = "block_msg_" + selected_ISO_low;
	    cur_block_welc_msg = row[lang_col_welc];
	    lang_col_pause = 'block_pause_msg_' + selected_ISO_low;
	    cur_block_pause_msg = row[lang_col_pause];
	    // Debug
	    console.log("cur_block_pause_msg:", cur_block_pause_msg);
	} else {
	    lang_col_welc = "single_block_msg_" + selected_ISO_low;
	    cur_block_welc_msg = row[lang_col_welc];
	    cur_block_pause_msg = null; // or set some default, if needed
	}
	// Advance the row index for the next loop iteration
	block_msg_row_idx = block_msg_row_idx + 1;
	
	
	// Debug
	console.log("cur_block_welc_msg:", cur_block_welc_msg);
	__end__
	set _prepare ""

define inline_javascript init_demographics
	set description ""
	___run__
	// Load and parse messages.csv into array of objects
	const dmg_csv_data = pool['Demographics.csv'].data;
	const dmg_df = csvParse(dmg_csv_data, {columns: true, delimiter: ';'}); // makes sure that we can use commas inside the text as OpenSesame does not yet support quotes around a text with commas as a single cell in a csv-file with comma-separator
	// Set language column
	var lang_col = selected_ISO; // e.g., 'EN'
	// For each row: create a global variable with the message key and assign the translation
	dmg_df.forEach(function(row) {
	    varname = row.demographics;
	    value = row[lang_col];
	    // Assign as global experimental variable
	    vars[varname] = value;
	});
	
	// Debug
	console.log('dmg_df:', dmg_df)
	__end__
	set _prepare ""

define inline_javascript init_experiment_settings
	set description ""
	___run__
	//// ISO code
	var selected_ISO = lang_df.find(row => row.language === selected_language)?.ISO_code;
	var selected_ISO_low = selected_ISO.toLowerCase();
	
	//// n reps
	var n_reps = "1"
	if (selected_n_reps === "4" || selected_n_reps === "1") {
	    n_reps = n_reps
	} else if (selected_n_reps === "8") {
	    n_reps = n_reps * 2
	} else if (selected_n_reps === "12"){
	    n_reps = n_reps * 3
	}
	
	if (selected_n_reps !== "1") {
	    total_n_testbl = 4 // run 4 blocks
	}
	
	console.log('n_reps:', n_reps);
	console.log('selected_n_reps:', selected_n_reps);
	console.log('total_n_testbl:',total_n_testbl)
	
	//// feedback
	if (selected_feedback === "No feedback in testblock(s)") {
	    feedback_time = 0
	} else {
	    feedback_time = Number.parseFloat(selected_feedback) * 1000 // convert to ms
	}
	console.log('selected_feedback:', selected_feedback);
	console.log('feedback_time:', feedback_time);
	
	//// n angles & body views
	if (selected_n_angles === "6 (0°, 45°, 135°, 180°, 225°, 315°)") {
	    conditions_file = "Stimuli_6angles_def_all.csv";
	    } else if (selected_n_angles === "8 (increments of 45°)") {
	        conditions_file = "Stimuli_8angles_all.csv";
	    } else if (selected_n_angles === "4 (increments of 90°)") {
	        conditions_file = "Stimuli_4angles_all.csv";
	    } else if (selected_n_angles === "6 (increments of 60°)") {
	        conditions_file = "Stimuli_6angles_all.csv";
	    } else if (selected_n_angles === "12 (increments of 30°)") {
	        conditions_file = "Stimuli_12angles_all.csv";
	}
	
	console.log('selected_n_angles:', selected_n_angles);
	console.log('conditions_file:', conditions_file);
	
	//// response_mode: keys
	if (selected_response_mode === "Both hands") {
	    left_key = "s-key.png";
	    right_key = "l-key.png";
	    } else {
	    left_key = "g-key.png";
	    right_key = "h-key.png";
	}
	
	
	//// ISO code
	// Debug
	console.log("selected_language:", selected_language);
	console.log("lang_df:", lang_df);
	
	// Find the row where the language property matches selected_language and read the ISO_code
	selected_ISO = lang_df.find(row => row.language === selected_language)?.ISO_code;
	
	// Debug
	console.log('selected_ISO:', selected_ISO);
	console.log('selected_response_mode:', selected_response_mode);
	console.log('selected_body_views:', selected_body_views);
	__end__
	set _prepare ""

define inline_javascript init_feedback
	set description ""
	___run__
	// in s: feedback_RT = (Math.floor((response_time_trial_response) / 100) / 10)
	var feedback_RT = response_time_trial_response
	
	if (selected_feedback !== "No feedback in testblock(s)") {
	    if (response_trial_response === "s" || 
	        response_trial_response === "g") {
	    if (mbrt_correct_response === 1) {
	    my_feedback = 1
	    } else if (mbrt_correct_response === 0) {
	    my_feedback = 2
	    } 
	} else if (response_trial_response === "l" ||
	            response_trial_response === "h") {
	    if (mbrt_correct_response === 1) {
	    my_feedback = 3
	    } else if (mbrt_correct_response === 0) {
	    my_feedback = 4
	    } 
	}
	}
	__end__
	set _prepare ""

define inline_javascript init_feedback_pract
	set description ""
	___run__
	// in s: feedback_RT = (Math.floor((response_time_trial_response) / 100) / 10)
	var feedback_RT = response_time_trial_response
	
	if (response_trial_response === "s" || 
	    response_trial_response === "g") {
	    if (mbrt_correct_response === 1) {
	    my_feedback = 1
	    } else if (mbrt_correct_response === 0) {
	    my_feedback = 2
	    } 
	    } else if (response_trial_response === "l" ||
	        response_trial_response === "h") {
	    if (mbrt_correct_response === 1) {
	    my_feedback = 3
	    } else if (mbrt_correct_response === 0) {
	    my_feedback = 4
	    } 
	}
	
	var pract_feedback_time = 1000
	
	if (feedback_time > 0) {
	    pract_feedback_time = feedback_time
	}
	__end__
	set _prepare ""

define inline_javascript init_instructions
	set description ""
	___run__
	// Load and parse instructions.csv into array of objects
	const instr_csv_data = pool['Instructions.csv'].data;
	const instr_df = csvParse(instr_csv_data, {columns: true, delimiter: ';'}); // makes sure that we can use commas inside the text as OpenSesame does not yet support quotes around a text with commas as a single cell in a csv-file with comma-separator
	// Debug
	console.log('instr_df:',instr_df)
	
	// Set language column
	// var lang_col = selected_ISO; // e.g., 'EN'
	// Debug
	console.log('lang_col:',lang_col)
	
	// For each row: create a global variable with the message key and assign the translation
	instr_df.forEach(function(row) {
	    varname = row.instr_msg;
	    value = row[lang_col];
	    // Assign as global experimental variable
	    vars[varname] = value;
	});
	
	// select correct instr_msg based on response_mode
	var instr_msg1b = instr_msg1b_bimanual
	var instr_msg3 = instr_msg3_bimanual
	
	if (selected_response_mode === "Left hand") {
	    instr_msg1b = instr_msg1b_left;
	    instr_msg3 = instr_msg3_unimanual;
	} else if (selected_response_mode === "Right hand") {
	    instr_msg1b = instr_msg1b_right;
	    instr_msg3 = instr_msg3_unimanual;
	}
	__end__
	set _prepare ""

define inline_javascript init_key_error
	set description ""
	___run__
	// currently, if a participant uses the wrong keys, the answer will always be feedbacked as incorrect
	if (
	    selected_response_mode === "Both hands" && 
	    (response_trial_response === "h" ||
	    response_trial_response === "g")) 
	                                             {
	    run_key_error = 1
	    } else if (selected_response_mode !== "Both hands" && 
	    (response_trial_response === "s" ||
	    response_trial_response === "l")) {
	    run_key_error = 1
	} else {
	    run_key_error = 0
	}
	
	if (selected_response_mode === "Both hands") {
	    my_keys = "S & L"
	    } else {
	    my_keys = "G & H"
	}
	__end__
	set _prepare ""

define inline_javascript init_localiser
	set description ""
	___run__
	// Reads the file 'language_localiser.csv' from the file pool, parses it, and creates a JavaScript array of languages, which corresponds to the original language_list.
	const lang_csv_data = pool['Language_localiser.csv'].data;
	
	// Parse CSV to array of objects (columns are taken from header row)
	const lang_df = csvParse(lang_csv_data, {columns: true, delimiter: ';'}); // makes sure that we can use commas inside the text as OpenSesame does not yet support quotes around a text with commas as a single cell in a csv-file with comma-separator
	
	// Extract 'language' column as array
	const language_list = lang_df.map(row => row.language);
	
	// Debug output to check
	console.log('Languages loaded:', language_list);
	__end__
	set _prepare ""

define inline_javascript init_messages
	set description ""
	___run__
	// Load and parse messages.csv into array of objects
	const msg_csv_data = pool['Messages.csv'].data;
	const msg_df = csvParse(msg_csv_data, {columns: true, delimiter: ';'}); // makes sure that we can use commas inside the text as OpenSesame does not yet support quotes around a text with commas as a single cell in a csv-file with comma-separator
	// Set language column
	var lang_col = selected_ISO; // e.g., 'EN'
	// For each row: create a global variable with the message key and assign the translation
	msg_df.forEach(function(row) {
	    varname = row.message;
	    value = row[lang_col];
	    // Assign as global experimental variable
	    vars[varname] = value;
	});
	
	// Debug
	console.log('msg_df:', msg_df)
	__end__
	set _prepare ""

define inline_javascript init_pract_trial
	set description ""
	___run__
	// Get which row to use for this trial
	var row_idx = pract_full_order[pract_row_idx];
	var row = pract_df[row_idx];
	
	// Set your variables for the trial
	var mbrt_images = row["mbrt_images"];
	var mbrt_side = row["mbrt_side"];
	var mbrt_view = row["mbrt_view"];
	var mbrt_angle = row["mbrt_angle"];
	var mbrt_limb = row["mbrt_limb"];
	var mbrt_correct_both = row["mbrt_correct_both"];
	var mbrt_correct_one = row["mbrt_correct_one"];
	var my_countdown = 3
	
	// Determine solution
	if (selected_response_mode === "Both hands") {
	    solution = mbrt_correct_both
	} else {
	    solution = mbrt_correct_one
	}
	
	// Move to next trial
	var pract_row_idx = pract_row_idx + 1;
	var n_trial = n_trial + 1;
	
	// Debugging: 
	console.log('row_idx:', row_idx);
	console.log('row:', row);
	console.log('mbrt_images:', mbrt_images);
	console.log('mbrt_side:', mbrt_side);
	console.log('mbrt_view:', mbrt_view);
	console.log('mbrt_angle:', mbrt_angle);
	console.log('mbrt_limb:', mbrt_limb);
	console.log('mbrt_correct_both:', mbrt_correct_both);
	console.log('mbrt_correct_one:', mbrt_correct_one);
	__end__
	set _prepare ""

define inline_javascript init_practice
	set description ""
	___run__
	// Initialize variables
	phase = "MBRT_practice";
	n_trial = 0;
	var row = 0; 
	var row_idx = 999;
	var pract_row_idx = 0
	
	var mbrt_images = undefined;
	var mbrt_side = undefined;
	var mbrt_view = undefined;
	var mbrt_angle = 999;
	var mbrt_limb = undefined;
	var mbrt_correct_both = undefined;
	var mbrt_correct_one = undefined;
	
	// Read and parse csv-file and define variables
	const pract_csv_data = pool["Stimuli_4angles_all.csv"].data; 
	let pract_df = undefined
	let pract_df_raw = csvParse(pract_csv_data, { columns: true, delimiter: ';' });
	pract_df_raw = pract_df_raw.filter(row =>
	    row.mbrt_angle === "0");
	            
	if (selected_body_views === "Front and Back") {
	    if (selected_limbs === "Arms and Legs") {
	        pract_df = pract_df_raw;
	    } else if (selected_limbs === "Arms") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_limb === "arm");
	    } else if (selected_limbs === "Legs") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_limb === "leg");
	    }
	} else if (selected_body_views === "Front") {
	    if (selected_limbs === "Arms and Legs") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_view === "front");
	    } else if (selected_limbs === "Arms") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_view === "front" && row.mbrt_limb === "arm");
	    } else if (selected_limbs === "Legs") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_view === "front" && row.mbrt_limb === "leg");
	    }
	} else if (selected_body_views === "Back") {
	    if (selected_limbs === "Arms and Legs") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_view === "back");
	    } else if (selected_limbs === "Arms") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_view === "back" && row.mbrt_limb === "arm");
	    } else if (selected_limbs === "Legs") {
	        pract_df = pract_df_raw.filter(row =>
	            row.mbrt_view === "back" && row.mbrt_limb === "leg");
	    }
	}
	
	
	var pract_row_idx = 0;
	var pract_length = pract_df.length;
	var pract_full_order_length = pract_length
	
	// Ensure random order of trials: Build an array with one entry per row, for n_reps times
	var pract_full_order = [];
	for (let rep = 0; rep < 1; ++rep) { /// CHANGE CODE HERE IF THERE SHOULD BE MORE PRACTICE TRIALS (n_reps instead of 1 or desired number of reps)
	    // one block of all indices (in natural order)
	    let trial_indices = [];
	    for (let i = 0; i < pract_df.length; ++i) {
	        trial_indices.push(i);
	    }
	    // shuffle block using Fisher-Yates algorithm
	    for (let j = trial_indices.length - 1; j > 0; --j) {
	        const k = Math.floor(Math.random() * (j + 1));
	        [trial_indices[j], trial_indices[k]] = [trial_indices[k], trial_indices[j]];
	    }
	    pract_full_order = pract_full_order.concat(trial_indices);
	}
	
	// Debugging:
	console.log('pract_row_idx:',pract_row_idx);
	console.log('pract_length:',pract_length);
	console.log('pract_df:',pract_df);
	console.log('pract_full_order:', pract_full_order);
	console.log('pract_full_order_length:', pract_full_order_length)
	__end__
	set _prepare ""

define inline_javascript init_testblock_loop1
	set description ""
	___run__
	// Initialize variables
	var phase = "MBRT_testblock";
	var n_trial = 0;
	var row = 0; 
	var row_idx = 999;
	var my_feedback = 0; 
	
	var testbl_row_idx = 0;
	var n_testbl = 0; // testblock counter
	
	var mbrt_images = "undefined";
	var mbrt_side = "undefined";
	var mbrt_view = "undefined";
	var mbrt_angle = 999;
	var mbrt_limb = "undefined";
	var mbrt_correct_both = "undefined";
	var mbrt_correct_one = "undefined";
	
	//// testbl_total_n_trials & testbl_full_order_length (= trials per block)
	const testbl_csv_data = pool[conditions_file].data;
	const testbl_df_raw = csvParse(testbl_csv_data, { columns: true, delimiter: ';' });
	
	let testbl_df;
	
	if (selected_body_views === "Front and Back") {
	    if (selected_limbs === "Arms and Legs") {
	        testbl_df = testbl_df_raw;
	    } else if (selected_limbs === "Arms") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_limb === "arm");
	    } else if (selected_limbs === "Legs") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_limb === "leg");
	    }
	} else if (selected_body_views === "Front") {
	    if (selected_limbs === "Arms and Legs") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_view === "front");
	    } else if (selected_limbs === "Arms") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_view === "front" && row.mbrt_limb === "arm");
	    } else if (selected_limbs === "Legs") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_view === "front" && row.mbrt_limb === "leg");
	    }
	} else if (selected_body_views === "Back") {
	    if (selected_limbs === "Arms and Legs") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_view === "back");
	    } else if (selected_limbs === "Arms") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_view === "back" && row.mbrt_limb === "arm");
	    } else if (selected_limbs === "Legs") {
	        testbl_df = testbl_df_raw.filter(row =>
	            row.mbrt_view === "back" && row.mbrt_limb === "leg");
	    }
	}
	
	// count n_rows in conditions_file and multiply with n_reps
	var testbl_length = testbl_df.length;
	var testbl_full_order_length = testbl_length * n_reps;
	var testbl_total_n_trials = testbl_length * selected_n_reps; 
	
	// Debug
	console.log('testbl_df_raw:', testbl_df_raw);
	console.log('testbl_df:', testbl_df);
	__end__
	set _prepare ""

define inline_javascript init_testblock_loop2
	set description ""
	___run__
	// Reset variable
	var testbl_row_idx = 0;
	
	// Ensure random order of trials: Build an array with one entry per row, for n_reps times
	var testbl_full_order = [];
	for (let rep = 0; rep < n_reps; ++rep) {
	    // one block of all indices (in natural order)
	    let trial_indices = [];
	    for (let i = 0; i < testbl_df.length; ++i) {
	        trial_indices.push(i);
	    }
	    // shuffle block using Fisher-Yates algorithm
	    for (let j = trial_indices.length - 1; j > 0; --j) {
	        const k = Math.floor(Math.random() * (j + 1));
	        [trial_indices[j], trial_indices[k]] = [trial_indices[k], trial_indices[j]];
	    }
	    testbl_full_order = testbl_full_order.concat(trial_indices);
	}
	
	// testblock_counter
	var n_testbl = n_testbl + 1
	
	// length testblock
	var testbl_full_order_length = testbl_full_order.length
	
	// Debugging:
	console.log('testbl_row_idx:',testbl_row_idx);
	console.log('testbl_length:',testbl_length);
	console.log('testbl_df:',testbl_df);
	console.log('testbl_full_order:', testbl_full_order);
	console.log('testbl_full_order_length:', testbl_full_order_length)
	__end__
	set _prepare ""

define inline_javascript init_trial
	set description ""
	___run__
	// Get which row to use for this trial
	var row_idx = testbl_full_order[testbl_row_idx];
	var row = testbl_df[row_idx];
	
	// Set your variables for the trial
	var mbrt_images = row["mbrt_images"];
	var mbrt_side = row["mbrt_side"];
	var mbrt_view = row["mbrt_view"];
	var mbrt_angle = row["mbrt_angle"];
	var mbrt_limb = row["mbrt_limb"];
	var mbrt_correct_both = row["mbrt_correct_both"];
	var mbrt_correct_one = row["mbrt_correct_one"];
	
	// Determine solution
	if (selected_response_mode === "Both hands") {
	    solution = mbrt_correct_both
	} else {
	    solution = mbrt_correct_one
	}
	
	// Move to next trial
	var testbl_row_idx = testbl_row_idx + 1;
	var n_trial = n_trial + 1;
	
	// Debugging: 
	console.log('row_idx:', row_idx)
	console.log('row:', row)
	console.log('mbrt_images:', mbrt_images)
	console.log('mbrt_side:', mbrt_side)
	console.log('mbrt_view:', mbrt_view)
	console.log('mbrt_angle:', mbrt_angle)
	console.log('mbrt_limb:', mbrt_limb)
	console.log('mbrt_correct_both:', mbrt_correct_both)
	console.log('mbrt_correct_one:', mbrt_correct_one)
	__end__
	set _prepare ""

define feedback instruction11
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{instr_msg1a}" x=0 y=-352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg1b}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_leg_back.png" scale=0.08 show_if=True x=224 y=-212 z_index=0

define feedback instruction12
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=22 html=yes show_if=True text="{instr_msg1a}" x=0 y=-352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg1b}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_leg_back.png" scale=0.08 show_if=True x=224 y=-212 z_index=0

define feedback instruction21
	set reset_variables yes
	set duration 4995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg2}" x=0 y=0 z_index=0

define feedback instruction22
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg2}" x=0 y=0 z_index=0

define feedback instruction31
	set reset_variables yes
	set duration 2995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg3}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=45 scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=180 scale=0.08 show_if=True x=224 y=-212 z_index=0

define feedback instruction32
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{instr_msg3}" x=0 y=120 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=-224 y=-192 z_index=0
	draw image center=1 file="screen.png" scale=0.29 show_if=True x=224 y=-192 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=-309 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=-224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=45 scale=0.08 show_if=True x=-224 y=-212 z_index=0
	draw rect color=black fill=1 h=170 penwidth=1 show_if=True w=170 x=139 y=-297 z_index=0
	draw circle color=white fill=1 penwidth=1 r=83 show_if=True x=224 y=-212 z_index=0
	draw image center=1 file="left_arm_front.png" rotation=180 scale=0.08 show_if=True x=224 y=-212 z_index=0

define sequence instructions_sequence1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_messages True
	run init_instructions True
	run welcome True
	run space True
	run instruction11 True
	run instruction12 True
	run space True
	run instruction21 True
	run instruction22 True
	run space True

define sequence instructions_sequence2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction31 True
	run instruction32 True
	run space True

define feedback key_error
	set reset_variables yes
	set duration 1995
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=Calibri font_italic=no font_size=32 html=yes show_if=True text="{my_keys}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=32 html=yes show_if=True text="{key_error_msg}" x=0 y=-64 z_index=0

define form_multiple_choice language_localiser
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	English
	German
	Spanish
	French
	__end__
	set margins "50;50;50;50"
	set form_var selected_language
	set form_title "Choose your language:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice limbs
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Arms and Legs
	Arms
	Legs
	__end__
	set margins "50;50;50;50"
	set form_var selected_limbs
	set form_title "Choose the limbs to be abducted in the stimuli:"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger logger
	set description "define every variable to log explicitly here"
	set auto_log no
	log subject_nr
	log age
	log sex
	log handedness
	log n_trial
	log testbl_total_n_trials
	log n_testbl
	log total_n_testbl
	log solution
	log mbrt_correct_response
	log phase
	log my_feedback
	log run_key_error
	log selected_language
	log selected_ISO
	log selected_response_mode
	log selected_feedback
	log feedback_time
	log selected_n_angles
	log selected_body_views
	log selected_limbs
	log practice_file
	log conditions_file
	log selected_n_reps
	log n_reps
	log feedback_time
	log conditions_file
	log n_reps
	log response_trial_response
	log response_time_trial_response
	log row_idx
	log mbrt_images
	log mbrt_side
	log mbrt_view
	log mbrt_angle
	log mbrt_limb
	log mbrt_correct_both
	log mbrt_correct_one

define sequence logger1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run logger True

define sequence logger2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run logger True

define form_multiple_choice n_angles
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	6 (0°, 45°, 135°, 180°, 225°, 315°)
	4 (increments of 90°)
	6 (increments of 60°)
	8 (increments of 45°)
	12 (increments of 30°)
	__end__
	set margins "50;50;50;50"
	set form_var selected_n_angles
	set form_title "Choose the number of angles presented:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice n_reps
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	1
	4
	8
	12
	__end__
	set margins "50;50;50;50"
	set form_var selected_n_reps
	set form_title "Choose the number of repetitions:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence pract_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_pract_trial True
	run fixdot True
	run trial True
	run trial_response True
	run eval_response True
	run init_key_error True
	run key_error "run_key_error == 1"
	run init_feedback_pract True
	run trial_feedback_sequence_pract "run_key_error == 0"
	run logger1 True

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_practice True
	run start_pract_sequence True
	run countdown_loop1 True
	run trial_within_practice_loop True
	run end_pract_sequence True

define inline_javascript preparations
	set description ""
	___run__
	subject_nr = Math.floor(Math.random() * 100000000000); // create unique ID
	var n_trial = 0; // trial counter
	var solution = 0; // will be s & l afterwards
	
	// phase item 
	var phase = "preparation"; 
	
	// random value for feedback
	var my_feedback = 0; 
	var run_key_error = 0; 
	
	// initialize defaults for experiment settings
	// if you want participants to choose the settings themselves, click "experiment_settings" and set the respective "Run if" statement(s) to "True" 
	var selected_language = "English"; // Alternative options: "German"
	var ISO_code = "EN"; // "DE", "ES", "FR"
	var selected_ISO = "EN"; // "DE", "ES", "FR"
	var selected_ISO_low = "en"; // "de", "es", "fr"
	var selected_response_mode = "Both hands"; // "Left hand", "Right hand"
	var selected_feedback = "No feedback in testblock(s)"; // "0.3" , "0.5", "0.8", "1"
	var selected_n_angles = "6 (0°, 45°, 135°, 180°, 225°, 315°)"; // "4 (increments of 90°)", "6 (increments of 60°)", "8 (increments of 45°)", "12 (increments of 30°)"
	var selected_body_views = "Front and Back"; // "Front", "Back"
	var selected_limbs = "Arms and Legs"; // "Arms", "Legs"
	var selected_n_reps = "4"; // 1, 8, 12
	
	// other
	var feedback_time = 0.3;
	var conditions_file = "Stimuli_6angles_def_all.csv";
	var n_reps = 1;
	var age = undefined;
	var sex = undefined;
	var handedness = undefined;
	var total_n_testbl = 1;
	var n_testbl = 0;
	var total_n_trials = 999;
	var trials_per_block = 999;
	__end__
	set _prepare ""

define form_multiple_choice response_mode
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Both hands
	Left hand
	Right hand
	__end__
	set margins "50;50;50;50"
	set form_var selected_response_mode
	set form_title "Choose your response mode:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice sex
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{sex_f}
	{sex_m}
	{sex_d}
	__end__
	set margins "50;50;50;50"
	set form_var sex
	set form_title "{sex_item}"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define keyboard_response space
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sequence start_pract_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run start_practice True
	run space True

define feedback start_practice
	set reset_variables yes
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Calibri font_italic=no font_size=23 html=yes show_if=True text="{start_pract_msg}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_block_messages1 True
	run init_testblock_loop1 True
	run instructions_sequence2 True
	run testblock_loop True

define loop testblock_loop
	set source_file ""
	set source table
	set repeat 4
	set order random
	set description ""
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "n_testbl >= total_n_testbl"
	setcycle 0 empty_column ""
	run testblock_sequence

define sequence testblock_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_testblock_loop2 True
	run block_welcome_sequence True
	run countdown_loop2 True
	run trial_within_testblock_loop True
	run block_pause_sequence "total_n_testbl > 1"

define feedback trial
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=1 h=672 penwidth=1 show_if=True w=672 x=-336 y=-336 z_index=0
	draw circle color=white fill=1 penwidth=1 r=334 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{mbrt_images}" rotation="{mbrt_angle}" scale=0.29 show_if=True x=0 y=0 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=-448 y=288 z_index=0
	draw rect color=black fill=1 h=64 penwidth=1 show_if=True w=64 x=384 y=288 z_index=0

define sequence trial_feedback_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run feedback_MBRT_left_correct "my_feedback == 1"
	run feedback_MBRT_left_incorrect "my_feedback == 2"
	run feedback_MBRT_right_correct "my_feedback == 3"
	run feedback_MBRT_right_incorrect "my_feedback == 4"

define sequence trial_feedback_sequence_pract
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run feedback_MBRT_left_correct_pract "my_feedback == 1"
	run feedback_MBRT_left_incorrect_pract "my_feedback == 2"
	run feedback_MBRT_right_correct_pract "my_feedback == 3"
	run feedback_MBRT_right_incorrect_pract "my_feedback == 4"

define feedback trial_no_feedback
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=1 h=672 penwidth=1 show_if=True w=672 x=-336 y=-336 z_index=0
	draw circle color=white fill=1 penwidth=1 r=334 show_if=True x=0 y=0 z_index=0
	draw image center=1 file="{mbrt_images}" rotation="{mbrt_angle}" scale=0.29 show_if=True x=0 y=0 z_index=0

define keyboard_response trial_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "{solution}"
	set allowed_responses "s;l;g;h;"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_trial True
	run fixdot "feedback_time > 0"
	run fixdot_no_feedback "feedback_time == 0"
	run trial "feedback_time > 0"
	run trial_no_feedback "feedback_time == 0"
	run trial_response True
	run eval_response True
	run init_key_error True
	run key_error "run_key_error == 1"
	run init_feedback True
	run trial_feedback_sequence "run_key_error == 0 and feedback_time > 0"
	run logger2 True

define loop trial_within_practice_loop
	set source_file ""
	set source table
	set repeat 500
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "pract_row_idx >= pract_full_order_length"
	setcycle 0 empty_column ""
	run pract_trial_sequence

define loop trial_within_testblock_loop
	set source_file ""
	set source table
	set repeat 500
	set order sequential
	set description "Repeat needs to be > than the number of rows in the csv-file"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "testbl_row_idx >= testbl_full_order_length"
	setcycle 0 empty_column ""
	run trial_sequence

define feedback welcome
	set reset_variables yes
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=23 html=yes show_if=True text="{welcome_msg}" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=False font_family=Calibri font_italic=False font_size=22 html=yes show_if=True text="{adv_msg}" x=0 y=340 z_index=0

