PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'language': '["English", "French", "Spanish", "German"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['mbrt_files/Messages.xlsx', 'mbrt_images/g-key.png', 'mbrt_images/h-key.png', 'mbrt_images/instr1.png', 'mbrt_images/instr3.png', 'mbrt_images/left_arm_back.png', 'mbrt_images/left_arm_front.png', 'mbrt_images/left_leg_back.png', 'mbrt_images/left_leg_front.png', 'mbrt_images/l-key.png', 'mbrt_images/right_arm_back.png', 'mbrt_images/right_arm_front.png', 'mbrt_images/right_leg_back.png', 'mbrt_images/right_leg_front.png', 'mbrt_images/screen.png', 'mbrt_images/s-key.png', 'mbrt_files/conditions_filtered/practice_arms_back.csv', 'mbrt_files/conditions_filtered/practice_arms_front.csv', 'mbrt_files/conditions_filtered/practice_arms_frontback.csv', 'mbrt_files/conditions_filtered/practice_armslegs_back.csv', 'mbrt_files/conditions_filtered/practice_armslegs_front.csv', 'mbrt_files/conditions_filtered/practice_armslegs_frontback.csv', 'mbrt_files/conditions_filtered/practice_legs_back.csv', 'mbrt_files/conditions_filtered/practice_legs_front.csv', 'mbrt_files/conditions_filtered/practice_legs_frontback.csv', 'mbrt_files/conditions_filtered/test_4_arms_back.csv', 'mbrt_files/conditions_filtered/test_4_arms_front.csv', 'mbrt_files/conditions_filtered/test_4_arms_frontback.csv', 'mbrt_files/conditions_filtered/test_4_armslegs_back.csv', 'mbrt_files/conditions_filtered/test_4_armslegs_front.csv', 'mbrt_files/conditions_filtered/test_4_armslegs_frontback.csv', 'mbrt_files/conditions_filtered/test_4_legs_back.csv', 'mbrt_files/conditions_filtered/test_4_legs_front.csv', 'mbrt_files/conditions_filtered/test_4_legs_frontback.csv', 'mbrt_files/conditions_filtered/test_6def_arms_back.csv', 'mbrt_files/conditions_filtered/test_6def_arms_front.csv', 'mbrt_files/conditions_filtered/test_6def_arms_frontback.csv', 'mbrt_files/conditions_filtered/test_6def_armslegs_back.csv', 'mbrt_files/conditions_filtered/test_6def_armslegs_front.csv', 'mbrt_files/conditions_filtered/test_6def_armslegs_frontback.csv', 'mbrt_files/conditions_filtered/test_6def_legs_back.csv', 'mbrt_files/conditions_filtered/test_6def_legs_front.csv', 'mbrt_files/conditions_filtered/test_6def_legs_frontback.csv', 'mbrt_files/conditions_filtered/test_6inc60_arms_back.csv', 'mbrt_files/conditions_filtered/test_6inc60_arms_front.csv', 'mbrt_files/conditions_filtered/test_6inc60_arms_frontback.csv', 'mbrt_files/conditions_filtered/test_6inc60_armslegs_back.csv', 'mbrt_files/conditions_filtered/test_6inc60_armslegs_front.csv', 'mbrt_files/conditions_filtered/test_6inc60_armslegs_frontback.csv', 'mbrt_files/conditions_filtered/test_6inc60_legs_back.csv', 'mbrt_files/conditions_filtered/test_6inc60_legs_front.csv', 'mbrt_files/conditions_filtered/test_6inc60_legs_frontback.csv', 'mbrt_files/conditions_filtered/test_8_arms_back.csv', 'mbrt_files/conditions_filtered/test_8_arms_front.csv', 'mbrt_files/conditions_filtered/test_8_arms_frontback.csv', 'mbrt_files/conditions_filtered/test_8_armslegs_back.csv', 'mbrt_files/conditions_filtered/test_8_armslegs_front.csv', 'mbrt_files/conditions_filtered/test_8_armslegs_frontback.csv', 'mbrt_files/conditions_filtered/test_8_legs_back.csv', 'mbrt_files/conditions_filtered/test_8_legs_front.csv', 'mbrt_files/conditions_filtered/test_8_legs_frontback.csv', 'mbrt_files/conditions_filtered/test_12_arms_back.csv', 'mbrt_files/conditions_filtered/test_12_arms_front.csv', 'mbrt_files/conditions_filtered/test_12_arms_frontback.csv', 'mbrt_files/conditions_filtered/test_12_armslegs_back.csv', 'mbrt_files/conditions_filtered/test_12_armslegs_front.csv', 'mbrt_files/conditions_filtered/test_12_armslegs_frontback.csv', 'mbrt_files/conditions_filtered/test_12_legs_back.csv', 'mbrt_files/conditions_filtered/test_12_legs_front.csv', 'mbrt_files/conditions_filtered/test_12_legs_frontback.csv', 'mbrt_files/Stimuli_4angles_all.xlsx', 'mbrt_files/Stimuli_6angles_all.xlsx', 'mbrt_files/Stimuli_6angles_def_all.xlsx', 'mbrt_files/Stimuli_8angles_all.xlsx', 'mbrt_files/Stimuli_12angles_all.xlsx', 'Language_localiser.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1500, 1000]
  color = 1.0000, 1.0000, 1.0000
  expName = MBRT_online
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    CodeComponent trial_code
      Code Type = Both
      Begin JS Routine:
        if ((selected_response_mode === "Both hands")) {
            solution = mbrt_correct_both;
        } else {
            solution = mbrt_correct_one;
        }
      Begin Routine:
        # column from conditions file to get correct responses
        if selected_response_mode == "Both hands":
            solution = mbrt_correct_both
        else:
            solution = mbrt_correct_one
      End JS Routine:
        response_trial_response = key_resp.keys;
        response_time_trial_response = key_resp.rt * 1000;

        mbrt_correct_response = Number(response_trial_response === solution);

        n_trial += 1;

        psychoJS.experiment.addData("phase", phase);
        psychoJS.experiment.addData("n_testbl", n_testbl);
        psychoJS.experiment.addData("n_trial", n_trial);
        psychoJS.experiment.addData("solution", solution);
        psychoJS.experiment.addData("mbrt_correct_response", mbrt_correct_response);
        psychoJS.experiment.addData("response_trial_response", response_trial_response);
        psychoJS.experiment.addData("response_time_trial_response", response_time_trial_response);
      End Routine:
        response_trial_response = key_resp.keys
        response_time_trial_response = key_resp.rt * 1000

        mbrt_correct_response = int(response_trial_response == solution)

        n_trial += 1

        thisExp.addData('phase', phase)
        thisExp.addData('n_testbl', n_testbl)
        thisExp.addData('n_trial', n_trial)
        thisExp.addData('solution', solution)
        thisExp.addData('mbrt_correct_response', mbrt_correct_response)
        thisExp.addData('response_trial_response', response_trial_response)
        thisExp.addData('response_time_trial_response', response_time_trial_response)
    PolygonComponent rectangle
      fillColor = black
      lineColor = black
      saveStartStop = False
      shape = rectangle
      size = (0.74, 0.74)
      startVal [time (s)] = 0.0
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    PolygonComponent circle
      fillColor = white
      saveStartStop = False
      shape = circle
      size = (0.73, 0.73)
      startVal [time (s)] = 0.0
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    ImageComponent stimulus
      image [set every repeat] = $mbrt_images
      ori [set every repeat] = mbrt_angle
      size = (0.705, 0.705)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = allowed_keys
      correctAns = $solution
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    PolygonComponent box_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = show_response_boxes
      pos = (-0.5, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent box_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = show_response_boxes
      pos = (0.5, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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  Routine load_lg
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    CodeComponent update_language_code
      Code Type = Auto->JS
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      Begin Experiment:
        ### DISABLE EXPERIMENT SETTINGS AND SET DEFAULT ###
        # 1) set default here (needs to be an ISO code from Language_localiser.xlsx)
        lang_code = "EN"
        # 2) comment out lines 2-3 in "Begin routine" tab of this code component
        # 3) Go to the "Experiment settings" and delete the "Experiment info" field for
        #    the experiment setting that you want to be fixed
      Begin Routine:
        # we update the language code based on the language localiser variable ISO_code
        if language == expInfo['language']: # comment out to set default
            lang_code = ISO_code            # "

        thisExp.addData("language_code", lang_code)  # add it to output
  Routine update_msg
    RoutineSettingsComponent update_msg
      saveStartStop = False
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    CodeComponent update_messages_code
      Code Type = Both
      Begin JS Routine:
        // change code that does not auto-translate correctly
        // we use window instead of globals()
        // to create the global variables
        // the rest is the same
        msg_name = message;
        msg_value = eval(lang_code);
        window[msg_name] = msg_value; // here is the change
        psychoJS.experiment.addData("msg_name", msg_name);
        psychoJS.experiment.addData("msg_value", msg_value);
      Begin Routine:
        ## THIS CODE DOES NOT AUTO-TRANSLATE!!!!

        # now that we have selected our new language (lang_code)
        # we can use a loop to iterate over the messages
        # every iteration, we're gonna update the value of our
        # global variables with the value corresponding to the
        # lang_code (ISO_code from the language localiser)
        # this way we don't need to manually specify the text

        # this iteration, select the message
        msg_name = message  # e.g. variable "welcome_msg"
        # for this iteration, assign the value based on code
        msg_value = eval(lang_code) # e.g. "Bienvenido" if lang_code = "ES"
        # update message based on code
        globals()[msg_name] = msg_value  # e.g. should update the value of welcome_msg by "Bienvenido"
        # finally we add the values to output just to check
        thisExp.addData("msg_name", msg_name)
        thisExp.addData("msg_value", msg_value)
  Routine bye
    RoutineSettingsComponent bye
      stopVal [duration (s)] = 3
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    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    KeyboardComponent adv_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent adv_txt_1
      color = -1,-1,-1
      letterHeight = 0.033
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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  Routine feedback
    RoutineSettingsComponent feedback
      stopVal [duration (s)] = $current_feedback_time
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    CodeComponent feedback_code
      Code Type = Both
      Begin JS Routine:
        // Do not show feedback after a wrong response-key group.
        // Do not show feedback in test blocks if feedback was disabled.
        feedback_RT_text = 0;
        fill_left = white;
        fill_right = white;

        if (phase === "MBRT_testblock" && !task_fb) {
            continueRoutine = false;

        } else {
            feedback_RT_text = `${Math.round(response_time_trial_response)} ms`;

            fill_left = black;
            fill_right = black;

            if (["s", "g"].includes(response_trial_response)) {
                fill_left = red;

                if (mbrt_correct_response === 1) {
                    fill_left = green;
                }

            } else if (["l", "h"].includes(response_trial_response)) {
                fill_right = red;

                if (mbrt_correct_response === 1) {
                    fill_right = green;
                }
            }
        }
      Begin Routine:
        # Do not show feedback after a wrong response-key group.
        # Do not show feedback in test blocks if feedback was disabled.
        if phase == 'MBRT_testblock' and not task_fb:
            continueRoutine = False

        else:
            feedback_RT_text = f'{int(round(response_time_trial_response))} ms'

            fill_left = black
            fill_right = black

            if response_trial_response in ['s', 'g']:
                fill_left = green if mbrt_correct_response == 1 else red
            elif response_trial_response in ['l', 'h']:
                fill_right = green if mbrt_correct_response == 1 else red
    PolygonComponent feedback_box_left
      fillColor [set every repeat] = $fill_left
      lineColor [set every repeat] = $fill_left
      pos = (-0.5, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_box_right
      fillColor [set every repeat] = $fill_right
      lineColor [set every repeat] = $fill_right
      pos = (0.5, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent rt_feedback_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_RT_text
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  Routine block_start
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    CodeComponent block_start_code
      Code Type = Both
      Begin Experiment:
        block_number = 0
        no_feedback_message = ""
        block_message = ""
        testblock_messages = []
      Begin JS Experiment:
        block_number = 0;
        no_feedback_message = "";
        block_message = "";
        testblock_messages = {};
      Begin JS Routine:
        psychoJS.window.mouseVisible = false;

        block_number += 1;
        psychoJS.experiment.addData("block_number", block_number);

        if ((block_number === 1)) {
            block_message = start_pract_msg;
        } else {
            if ((selected_n_reps === "1")) {
                block_message = start_single_block_msg;
            } else {
                testblock_messages = {[2]: start_first_block_msg, [3]: start_second_block_msg, [4]: start_third_block_msg, [5]: start_fourth_block_msg};
                block_message = testblock_messages[block_number];
            }
        }
        if (((block_number > 1) && (! task_fb))) {
            no_feedback_message = no_fb_msg;
        }
      Begin Routine:
        win.mouseVisible = False
        # start block at 1 and increase every iteration
        block_number += 1
        thisExp.addData("block_number", block_number)

        # set up block messages according to task progress
        if block_number == 1:
            # Practice block
            block_message = start_pract_msg

        elif selected_n_reps == '1':
            # Single test block
            block_message = start_single_block_msg

        else:
            # four test blocks
            testblock_messages = {
                2: start_first_block_msg,
                3: start_second_block_msg,
                4: start_third_block_msg,
                5: start_fourth_block_msg
            }

            block_message = testblock_messages[block_number]

        # For testblocks without feedback
        if block_number > 1 and not task_fb:
            no_feedback_message = no_fb_msg
    TextComponent block_start_txt
      color = -1,-1,-1
      letterHeight = 0.03
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_message
      wrapWidth = 1.25
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    TextComponent no_fb_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -.23)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $no_feedback_message
      wrapWidth = 1.25
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    TextComponent adv_txt_6
      color = -1,-1,-1
      letterHeight = 0.03
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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    CodeComponent block_settings_code
      Code Type = Both
      End JS Routine:
        if ((block_number === 1)) {
            phase = "MBRT_practice";
            trial_conditions = practice_conditions_file;
            reps_per_block = 1;
            n_trial = 0;
            n_testbl = 0;
            show_response_boxes = 1;
            current_feedback_time = practice_feedback_time;
        } else {
            phase = "MBRT_testblock";
            trial_conditions = test_conditions_file;
            reps_per_block = test_reps_per_block;
            n_testbl = (block_number - 1);

            if ((block_number === 2)) {
                n_trial = 0;
            }

            if (task_fb) {
                show_response_boxes = 1;
                current_feedback_time = feedback_time;
            } else {
                show_response_boxes = 0;
                current_feedback_time = 0.0;
            }
        }

        psychoJS.experiment.addData("phase", phase);
        psychoJS.experiment.addData("n_testbl", n_testbl);
      End Routine:
        if block_number == 1:
            # Practice block
            phase = 'MBRT_practice'
            trial_conditions = 'Practice_last_run.csv'
            reps_per_block = 1
            n_trial = 0
            n_testbl = 0
            show_response_boxes = 1
            current_feedback_time = practice_feedback_time

        else:
            # Test blocks
            phase = 'MBRT_testblock'
            trial_conditions = 'Stimuli_last_run.csv'
            reps_per_block = test_reps_per_block
            n_testbl = block_number - 1

            if block_number == 2:
                n_trial = 0

            if task_fb:
                show_response_boxes = 1
                current_feedback_time = feedback_time
            else:
                show_response_boxes = 0
                current_feedback_time = 0.0

        thisExp.addData('phase', phase)
        thisExp.addData('n_testbl', n_testbl)
    ImageComponent left_key_image
      image [set every repeat] = $left_key_img
      pos = (-.5, -.4)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
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    ImageComponent right_key_image
      image [set every repeat] = $right_key_img
      pos = (.5, -.4)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
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  Routine block_end
    RoutineSettingsComponent block_end
      saveStartStop = False
      skipIf = total_blocks == 2 & block_number > 1
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Experiment:
        block_end_message = ""
      Begin Routine:
        if total_blocks == 2 and block_number > 1:
            continueRoutine = False
        else:
            if block_number == 1:
                block_end_message = end_pract_msg

            elif block_number == 2:
                block_end_message = end_first_block_msg

            elif block_number == 3:
                block_end_message = end_second_block_msg

            elif block_number == 4:
                block_end_message = end_third_block_msg

            elif block_number == 5:
                block_end_message = end_fourth_block_msg
    TextComponent block_end_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_end_message
      wrapWidth = 1.3
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    TextComponent adv_txt_7
      color = -1,-1,-1
      letterHeight = 0.03
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 5
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
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  Routine exp_settings
    RoutineSettingsComponent exp_settings
      saveStartStop = False
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    CodeComponent n_reps_settings
      Code Type = Both
      Begin Experiment:
        ### SET DEFAULT HERE (adjust left AND right tab) ###
        # Options: "1", "4", "8", "12"
        selected_n_reps = "4" # HERE!

        # Add to output
        thisExp.addData("selected_n_reps", selected_n_reps)

        # MBRT always includes one practice block
        pract_block = 1

        # Test block structure
        if selected_n_reps == '1':
            total_test_blocks = 1
            test_reps_per_block = 1
        else:
            total_test_blocks = 4
            test_reps_per_block = int(selected_n_reps) // 4

        # One practice block plus the test blocks
        total_blocks = 1 + total_test_blocks

        # Counters
        block_number = 0
        n_testbl = 0
        n_trial = 0
        phase = ''
      Begin JS Experiment:
        // SET DEFAULT HERE (adjust left AND right tab)
        // Options: "1", "4", "8", "12"
        selected_n_reps = "4"; // HERE!

        // Add to output
        psychoJS.experiment.addData("selected_n_reps", selected_n_reps);

        // MBRT always includes one practice block
        pract_block = 1;

        // Test block structure
        total_test_blocks = 0;
        test_reps_per_block = 0;

        if (selected_n_reps === "1") {
            total_test_blocks = 1;
            test_reps_per_block = 1;
        } else {
            total_test_blocks = 4;
            test_reps_per_block = Number(selected_n_reps) / 4;
        }

        // One practice block plus the test blocks
        total_blocks = 1 + total_test_blocks;

        // Counters
        block_number = 0;
        n_testbl = 0;
        n_trial = 0;
        phase = "";
    CodeComponent feedback_settings
      Code Type = Auto->JS
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      Begin Experiment:
        ### SET DEFAULT HERE (updates automat. in right tab) ###
        # Options: "0.3", "0.5", "0.8", "1", "No feedback in testblock(s)"
        selected_feedback = "No feedback in testblock(s)" # HERE!

        # Add to output
        thisExp.addData("selected_feedback", selected_feedback)

        if selected_feedback == 'No feedback in testblock(s)':
            task_fb = False
            feedback_time = 0.0
        else:
            task_fb = True
            feedback_time = float(selected_feedback)

        # Practice always has feedback.
        # If test feedback is disabled, practice feedback lasts 1 s.
        practice_feedback_time = feedback_time if task_fb else 1.0

        white = [1, 1, 1]
        black = [-1, -1, -1]
        green = [-1, 0, -1]
        red = [0.5, -1, -1]
    CodeComponent conditions_settings
      Code Type = Both
      Begin Experiment:
        ### SET DEFAULTS HERE (left AND right tab) ###
        # Options:
        #  - n_angles: ("6 (0, 45, 135, 180, 225, 315)", "4 (increments of 90)",
        #               "6 (increments of 60)", "8 (increments of 45)",
        #               "12 (increments of 30)")
        #  - limbs: ("Arms and Legs", "Arms", "Legs")
        #  - body_views: ("Front and Back", "Front", "Back")
        #  - response_mode: ("Both hands", "Left hand", "Right hand")
        selected_n_angles = "6 (0, 45, 135, 180, 225, 315)" # HERE!
        selected_limbs = "Arms and Legs" # HERE!
        selected_body_views = "Front and Back" # HERE!
        selected_response_mode = "Both hands" # HERE!

        # Add to output
        thisExp.addData("selected_n_angles", selected_n_angles)
        thisExp.addData("selected_limbs", selected_limbs)
        thisExp.addData("selected_body_views", selected_body_views)
        thisExp.addData("selected_response_mode", selected_response_mode)

        # Select corresponding conditions file
        import pandas as pd

        conditions_map = {
            '6 (0, 45, 135, 180, 225, 315)': 'mbrt_files/Stimuli_6angles_def_all.xlsx',
            '4 (increments of 90)': 'mbrt_files/Stimuli_4angles_all.xlsx',
            '6 (increments of 60)': 'mbrt_files/Stimuli_6angles_all.xlsx',
            '8 (increments of 45)': 'mbrt_files/Stimuli_8angles_all.xlsx',
            '12 (increments of 30)': 'mbrt_files/Stimuli_12angles_all.xlsx'
        }

        conditions_file = conditions_map[selected_n_angles]

        # Stimuli
        test_df = pd.read_excel(conditions_file)
        practice_df = pd.read_excel('mbrt_files/Stimuli_4angles_all.xlsx')

        if selected_body_views == 'Front':
            test_df = test_df[test_df['mbrt_view'] == 'front']
            practice_df = practice_df[practice_df['mbrt_view'] == 'front']
        elif selected_body_views == 'Back':
            test_df = test_df[test_df['mbrt_view'] == 'back']
            practice_df = practice_df[practice_df['mbrt_view'] == 'back']

        if selected_limbs == 'Arms':
            test_df = test_df[test_df['mbrt_limb'] == 'arm']
            practice_df = practice_df[practice_df['mbrt_limb'] == 'arm']
        elif selected_limbs == 'Legs':
            test_df = test_df[test_df['mbrt_limb'] == 'leg']
            practice_df = practice_df[practice_df['mbrt_limb'] == 'leg']

        test_df = test_df.reset_index(drop=True)
        test_df['mbrt_images'] = 'mbrt_images/' + test_df['mbrt_images'].astype(str)
        test_df.to_csv('Stimuli_last_run.csv', index=False)

        practice_df = practice_df[practice_df['mbrt_angle'] == 0].reset_index(drop=True)
        practice_df['mbrt_images'] = 'mbrt_images/' + practice_df['mbrt_images'].astype(str)
        practice_df.to_csv('Practice_last_run.csv', index=False)
      Begin JS Experiment:
        // SET DEFAULTS HERE (left AND right tab)
        // Options:
        //  - n_angles: "6 (0, 45, 135, 180, 225, 315)", "4 (increments of 90)",
        //              "6 (increments of 60)", "8 (increments of 45)",
        //              "12 (increments of 30)"
        //  - limbs: "Arms and Legs", "Arms", "Legs"
        //  - body_views: "Front and Back", "Front", "Back"
        //  - response_mode: "Both hands", "Left hand", "Right hand"

        selected_n_angles = "6 (0, 45, 135, 180, 225, 315)"; // HERE!
        selected_limbs = "Arms and Legs"; // HERE!
        selected_body_views = "Front and Back"; // HERE!
        selected_response_mode = "Both hands"; // HERE!

        // Add to output
        psychoJS.experiment.addData("selected_n_angles", selected_n_angles);
        psychoJS.experiment.addData("selected_limbs", selected_limbs);
        psychoJS.experiment.addData("selected_body_views", selected_body_views);
        psychoJS.experiment.addData("selected_response_mode", selected_response_mode);

        // File-name codes
        n_angles_code_map = {
            "4 (increments of 90)": "4",
            "6 (increments of 60)": "6inc60",
            "6 (0, 45, 135, 180, 225, 315)": "6def",
            "8 (increments of 45)": "8",
            "12 (increments of 30)": "12"
        };

        limbs_code_map = {
            "Arms and Legs": "armslegs",
            "Arms": "arms",
            "Legs": "legs"
        };

        views_code_map = {
            "Front and Back": "frontback",
            "Front": "front",
            "Back": "back"
        };

        // Build selected file names
        n_angles_code = n_angles_code_map[selected_n_angles];
        limbs_code = limbs_code_map[selected_limbs];
        views_code = views_code_map[selected_body_views];

        test_conditions_file = "mbrt_files/conditions_filtered/test_" + n_angles_code + "_" + limbs_code + "_" + views_code + ".csv";
        practice_conditions_file = "mbrt_files/conditions_filtered/practice_" + limbs_code + "_" + views_code + ".csv";

        console.log("test_conditions_file:", test_conditions_file);
        console.log("practice_conditions_file:", practice_conditions_file);
  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
      stopVal [duration (s)] = 3
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    TextComponent countdown_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = 3
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    TextComponent countdown_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.9
      text = 2
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    TextComponent countdown_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.9
      text = 1
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  Routine demographics
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    CodeComponent demo_code
      Code Type = Auto->JS
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      Begin Routine:
        # make mouse visible
        document.body.style.cursor = 'auto';
      End Routine:
        document.body.style.cursor = 'none';
    TextComponent demographics_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $demographics_msg
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    TextComponent age_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $age_msg
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    TextboxComponent age_textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.03
      placeholder = ...
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent gender_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gender_msg
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    SliderComponent gender_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '', '', '', '')
      letterHeight = 0.025
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextboxComponent label_female
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.5, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f_msg
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    TextboxComponent label_male
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.3, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $m_msg
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    TextboxComponent label_transgender
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.0275
      lineSpacing = 0.8
      pos = (-0.1, -0.1)
      size = (0.18, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tg_msg
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    TextboxComponent label_nonbinary
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.1, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nb_msg
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    TextboxComponent label_other
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.3, -0.1)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $o_msg
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    TextboxComponent label_prefer_not_say
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.5, -0.175)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pns_msg
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    TextComponent laterality_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $laterality_msg
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    SliderComponent laterality_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '')
      letterHeight = 0.025
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextboxComponent label_left
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.25, -0.45)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_msg
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    TextboxComponent label_ambi
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0, -0.45)
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ambi_msg
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    TextboxComponent label_right
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.25, -0.45)
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_msg
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    ButtonComponent next_button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (0.5, -0.35)
      save = first click
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $next_msg
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  Routine update_instr_msg
    RoutineSettingsComponent update_instr_msg
      saveStartStop = False
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    CodeComponent update_instr_msg_code
      Code Type = Both
      Begin JS Routine:
        // change code that does not auto-translate correctly
        // we use window instead of globals()
        // to create the global variables
        // the rest is the same
        instr_msg_name = instr_msg;
        instr_msg_value = eval(lang_code);
        window[instr_msg_name] = instr_msg_value; // here is the change
        psychoJS.experiment.addData("instr_msg_name", instr_msg_name);
        psychoJS.experiment.addData("instr_msg_value", instr_msg_value);
      Begin Routine:
        # now that we have selected our new language (lang_code)
        # we can use a loop to iterate over the messages
        # every iteration, we're gonna update the value of our
        # global variables with the value corresponding to the
        # lang_code (ISO_code from the language localiser)
        # this way we don't need to manually specify the text

        # this iteration, select the message
        instr_msg_name = instr_msg  # e.g. variable "welcome_msg"
        # for this iteration, assign the value based on code
        instr_msg_value = eval(lang_code) # e.g. "Bienvenido" if lang_code = "ES"
        # update message based on code
        globals()[instr_msg_name] = instr_msg_value  # e.g. should update the value of welcome_msg by "Bienvenido"
        # finally we add the values to output just to check
        thisExp.addData("instr_msg_name", instr_msg_name)
        thisExp.addData("instr_msg_value", instr_msg_value)
  Routine instruction1
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    TextComponent instruction1a_msg
      color = -1, -1, -1
      letterHeight = 0.03
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg1a
      wrapWidth = 1.3
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    ImageComponent instr1_img
      image [set every repeat] = mbrt_images/instr1.png
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.7785, 0.2322)
      startVal [time (s)] = 0.0
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    TextComponent instruction1b
      color = -1, -1, -1
      letterHeight = 0.03
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg1b
      wrapWidth = 1.3
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    KeyboardComponent adv_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
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    TextComponent adv_txt_2
      color = -1,-1,-1
      letterHeight = 0.03
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 5
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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  Routine helper_code
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    CodeComponent response_mode_settings
      Code Type = Both
      Begin Experiment:
        # initialize variables
        instr_msg1b = ""
        allowed_keys = ["g", "h"]
        left_key_img = "mbrt_images/g-key.png"
        right_key_img = "mbrt_images/h-key.png"
      Begin JS Experiment:
        instr_msg1b = "";
        allowed_keys = ["g", "h"];
        left_key_img = "mbrt_images/g-key.png";
        right_key_img = "mbrt_images/h-key.png";
      Begin JS Routine:
        instr_msg3 = instr_msg3_unimanual;

        if ((selected_response_mode === "Both hands")) {
            instr_msg1b = instr_msg1b_bimanual;
            instr_msg3 = instr_msg3_bimanual;
            allowed_keys = ["s", "l"];
            left_key_img = "mbrt_images/s-key.png";
            right_key_img = "mbrt_images/l-key.png";
        } else {
            if ((selected_response_mode === "Right hand")) {
                instr_msg1b = instr_msg1b_right;
            } else {
                if ((selected_response_mode === "Left hand")) {
                    instr_msg1b = instr_msg1b_left
                }
            }
        }
      Begin Routine:
        instr_msg3 = instr_msg3_unimanual

        if selected_response_mode == "Both hands":
            instr_msg1b = instr_msg1b_bimanual
            instr_msg3 = instr_msg3_bimanual
            allowed_keys = ["s", "l"]
            left_key_img = "mbrt_images/s-key.png"
            right_key_img = "mbrt_images/l-key.png"
        elif selected_response_mode == "Right hand":
            instr_msg1b = instr_msg1b_right
        elif selected_response_mode == "Left hand":
            instr_msg1b = instr_msg1b_left
  Routine fixdot
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    PolygonComponent fixdot_poly
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent inner_fixdot_poly
      fillColor = white
      lineColor = black
      shape = circle
      size = (0.004, 0.004)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent box_left_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = show_response_boxes
      pos = (-0.5, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent box_right_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = show_response_boxes
      pos = (0.5, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instruction2
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    TextComponent instruction2_msg
      color = -1, -1, -1
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg2
      wrapWidth = 1.3
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    KeyboardComponent adv_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
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    TextComponent adv_txt_3
      color = -1,-1,-1
      letterHeight = 0.03
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 5
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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  Routine instruction3
    RoutineSettingsComponent instruction3
      skipIf = block_number > 1
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    ImageComponent instr3_img
      image [set every repeat] = mbrt_images/instr3.png
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.7785, 0.2322)
      startVal [time (s)] = 0.0
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    TextComponent instruction3_txt
      color = -1, -1, -1
      letterHeight = 0.03
      pos = (0, -0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg3
      wrapWidth = 1.3
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    KeyboardComponent adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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    TextComponent adv_txt
      color = -1,-1,-1
      letterHeight = 0.03
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 3
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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  Routine start_pract
    RoutineSettingsComponent start_pract
      skipIf = block_number > 0
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    TextComponent start_pract_txt
      color = -1, -1, -1
      letterHeight = 0.033
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_pract_msg
      wrapWidth = 1.3
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    TextComponent adv_txt_4
      color = -1,-1,-1
      letterHeight = 0.033
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine end_pract
    RoutineSettingsComponent end_pract
      skipIf = block_number > 0
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    TextComponent end_pract_txt
      color = -1, -1, -1
      letterHeight = 0.033
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_pract_msg
      wrapWidth = 1.3
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    TextComponent adv_txt_5
      color = -1,-1,-1
      letterHeight = 0.033
      pos = (0, -.45)
      saveStartStop = False
      startVal [time (s)] = 1
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    KeyboardComponent adv_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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Flow
  Routine exp_settings
  LoopInitiator load_lg_loop loopType="TrialHandler"
    conditionsFile = Language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'French', 'ISO_code': 'FR'}]
    Routine load_lg
  LoopTerminator load_lg_loop
  LoopInitiator update_msg_loop loopType="TrialHandler"
    conditionsFile = mbrt_files/Messages.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'message': 'welcome_msg', 'EN': 'Welcome to the experiment!', 'DE': 'Willkommen zum Experiment!', 'ES': '¡Bienvenido al experimento!', 'FR': 'Bienvenue dans l’expérience !'},
      {'message': 'adv_msg', 'EN': 'press SPACE to continue', 'DE': 'zum Fortfahren LEERTASTE drücken', 'ES': 'Presiona ESPACIO para continuar', 'FR': 'Appuyez sur ESPACE pour continuer'},
      {'message': 'key_error_msg', 'EN': 'Please use the following keys:', 'DE': 'Bitte verwenden Sie die folgenden Tasten:', 'ES': 'Por favor, utilice las siguientes teclas:', 'FR': 'Veuillez utiliser les touches suivantes :'},
      {'message': 'bye_msg', 'EN': 'This is the end of the experiment.\nThank you for participating!\nWait 3 seconds to exit.', 'DE': 'Dies ist das Ende des Experiments.\nVielen Dank für Ihre Teilnahme!\nDas Experiment schließt sich in 3 Sekunden.', 'ES': 'Este es el final del experimento.\n¡Gracias por participar!\nEspera 3 segundos para salir', 'FR': "Ceci est la fin de l'expérience.\nMerci d'avoir participé !\nAttendez 3 secondes pour quitter"},
      {'message': 'instr_msg1a', 'EN': 'In the following you will see such stimuli.', 'DE': 'Im Folgenden werden Sie solche Stimuli sehen.', 'ES': 'A continuación verá este tipo de estímulos.', 'FR': 'Dans ce qui suit, vous verrez de tels stimuli.'}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
    Routine update_msg
  LoopTerminator update_msg_loop
  Routine helper_code
  Routine welcome
  Routine demographics
  Routine instruction1
  Routine instruction2
  LoopInitiator blocks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = total_blocks
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    Routine block_start
    Routine countdown
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $trial_conditions
      loopType = random
      nReps = reps_per_block
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      Routine fixdot
      Routine trial
      Routine feedback
    LoopTerminator trials_loop
    Routine block_end
    Routine instruction3
  LoopTerminator blocks_loop
  Routine bye
